CellProfiler Pipeline: http://www.cellprofiler.org
Version:5
DateRevision:426
GitHash:
ModuleCount:14
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Images only
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
Metadata:[module_num:2|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
    Extract metadata?:No
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
NamesAndTypes:[module_num:3|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
    Assign a name to:Images matching rules
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    Image set matching method:Order
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    Assignments count:3
    Single images count:0
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    Process as 3D?:No
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    Select the rule criteria:and (or (file does contain "mask"))
    Name to assign these images:Mask
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file doesnot contain "mask")
    Name to assign these images:Origin
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    Select the image type:Color image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file doesnot contain "mask")
    Name to assign these images:Grayscale
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
ConvertImageToObjects:[module_num:5|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
    Select the input image:Mask
    Name the output object:NucleiObjects
    Convert to boolean image:No
    Preserve original labels:No
    Background label:0
    Connectivity:0

MeasureObjectSizeShape:[module_num:6|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
    Select object sets to measure:NucleiObjects
    Calculate the Zernike features?:No
    Calculate the advanced features?:No

MeasureImageAreaOccupied:[module_num:7|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
    Measure the area occupied by:Objects
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    Select object sets to measure:NucleiObjects

MeasureObjectIntensity:[module_num:8|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
    Select images to measure:Grayscale
    Select objects to measure:NucleiObjects

MeasureImageIntensity:[module_num:9|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
    Select images to measure:Grayscale
    Measure the intensity only from areas enclosed by objects?:No
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    Calculate custom percentiles:No
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
MeasureObjectNeighbors:[module_num:10|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
    Select objects to measure:NucleiObjects
    Select neighboring objects to measure:NucleiObjects
    Method to determine neighbors:Expand until adjacent
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    Consider objects discarded for touching image border?:Yes
    Retain the image of objects colored by numbers of neighbors?:No
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    Retain the image of objects colored by percent of touching pixels?:No
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
MeasureTexture:[module_num:11|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
    Select images to measure:Grayscale
    Select objects to measure:NucleiObjects
    Enter how many gray levels to measure the texture at:256
    Hidden:1
    Measure whole images or objects?:Images
    Texture scale to measure:3

MeasureObjectIntensityDistribution:[module_num:12|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
    Select images to measure:Grayscale
    Hidden:1
    Hidden:1
    Hidden:0
    Calculate intensity Zernikes?:None
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    Select objects to measure:NucleiObjects
    Object to use as center?:These objects
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    Scale the bins?:Yes
    Number of bins:4
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
MeasureGranularity:[module_num:13|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
    Select images to measure:Grayscale
    Measure within objects?:Yes
    Select objects to measure:NucleiObjects
    Subsampling factor for granularity measurements:0.25
    Subsampling factor for background reduction:0.25
    Radius of structuring element:10
    Range of the granular spectrum:16

ExportToSpreadsheet:[module_num:14|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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:No
    Add image file and folder names to your object data file?:No
    Select the measurements to export:No
    Calculate the per-image mean values for object measurements?:Yes
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:Yes
    Output file location:Default Output Folder sub-folder|features
    Create a GenePattern GCT file?:No
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    Export all measurement types?:No
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    Representation of Nan/Inf:NaN
    Add a prefix to file names?:No
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    Overwrite existing files without warning?:Yes
    Data to export:Image
    Combine these object measurements with those of the previous object?:No
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    Use the object name for the file name?:Yes
    Data to export:NucleiObjects
    Combine these object measurements with those of the previous object?:No
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    Use the object name for the file name?:Yes
